OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
Comment
  Testing scenario for Openvibe -> Unity data flow

Sinus oscillator
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.25
-> Signal average => #2
-> TCP Writer
  Port = 5678
  Output format = Raw
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#4.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause
Data=#2, Stimulations=#4.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
