OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
Comment
  A more complex scenario is demonstrated here.

  - Use Channel Selector to choose only subset of EEG channels
  - Use Channel Rename to give proper names to each of the
     channels you record
  - Use Stimulation Filter to filter out stimulation codes inserted
     by the driver (sometimes good to get rid of some of them)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #2
  New channel names = Channel 1;Channel 2;Channel 3;Channel 4;Channel 5;Channel 6;Channel 7;Channel 8
-> Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 2
  High Cut-off Frequency (Hz) = 35
  Band Pass Ripple (dB) = 0.5
#0.Stimulations -> Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_AddedSamplesBegin
  Stimulation range end = OVTK_StimulationId_AddedSamplesEnd
-> Stimulation Filter => #5
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_RemovedSamples
  Stimulation range end = OVTK_StimulationId_RemovedSamples
Signal=#2, Stimulation=#5 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].gdf
Data=#3, Stimulations=#5 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
