OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
Comment
  Compared to simple_record.xml, this scenario also displays
  filtered EEG signals (saved signal file will contain unfiltered signals).

  Set Temporal Filter box for adjusting the filter settings.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 2
  High Cut-off Frequency (Hz) = 35
  Band Pass Ripple (dB) = 0.5
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Signal stream -> Channel Selector "1:2"
  Channel List = 1:2
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch duration (in sec) = 0.25
  Epoch intervals (in sec) = 0.25
-> Signal average => #5
Data=#5, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#5 -> TCP Writer
  Port = 20000
  Output format = Raw
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/record-[$core{date}-$core{time}].gdf
